CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Use regular expressions to match and name metadata in the file and path names. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in all folders against the text pattern ‘GFPHistone’.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (and (file does contain "Green"))
    Name to assign these images:green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Red_mCh")
    Name to assign these images:red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DNA")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Group the analysis by the ‘Run’ metadata so that each folder is analyzed separately. ']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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:C

IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the fly embryos from the histone stain image. Three-class thresholding works better than the default two-class method.']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
    Select the input image:DNA
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,9999
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.003,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:nuclei
    Name the objects to be identified:membranes
    Select the method to identify the secondary objects:Propagation
    Select the input image:red
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:.1
    Lower and upper bounds on threshold:0.0005,1.0
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
MeasureObjectIntensity:[module_num:7|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notes:['Measure the grayscale intensity of each embryo.']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
    Hidden:2
    Select an image to measure:red
    Select an image to measure:green
    Select objects to measure:membranes

FilterObjects:[module_num:8|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
    Select the objects to filter:membranes
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_red
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0007
    Filter using a maximum measurement value?:No
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
TrackObjects:[module_num:9|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notes:['Track the embryos across images using the Overlap method: tracked objects are identified by the amount of frame-to-frame overlap. Save an image of embryos labeled with a unique number across time.']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
    Choose a tracking method:Overlap
    Select the objects to track:FilterObjects
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    Maximum pixel distance to consider matches:40
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:15
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
MeasureObjectIntensity:[module_num:10|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
    Hidden:2
    Select an image to measure:red
    Select an image to measure:green
    Select objects to measure:FilterObjects

MeasureObjectSizeShape:[module_num:11|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notes:['Measure the morphology of each embryo.']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
    Select objects to measure:FilterObjects
    Calculate the Zernike features?:No

RescaleIntensity:[module_num:12|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
    Select the input image:red
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:13|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
    Select the input image:DNA
    Name the output image:dna_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:nuclei_on_non_dna
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:nuclei

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:dna_rescaled
    Name the output image:dna_membranes
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:FilterObjects

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:filteredoutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:FilterObjects

Tile:[module_num:17|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notes:['Tile the original color image, the outlined image and the image of tracked labels together.']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
    Select an input image:nuclei_on_non_dna
    Name the output image:AdjacentImage
    Tile assembly method:Within cycles
    Final number of rows:2
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:dna_membranes
    Select an additional image to tile:filteredoutlines
    Select an additional image to tile:TrackedCells

SaveImages:[module_num:18|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notes:['Save the tiled image as an PNG, naming each image according to ‘Specimen’ and ‘Frame’ metadata of the original image. Save the image in a new sub-folder created and named according to the ‘Run’ metadata.']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
    Select the type of image to save:Image
    Select the image to save:AdjacentImage
    Select method for constructing file names:Single name
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    Enter single file name:image\g<T>
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    Saved file format:png
    Output file location:Default Output Folder|\g<Run>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:19|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the embryo objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|spreadsheet
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:FilterObjects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
